opentrons/protocol-designer 7.0.2
schemaVersion: 7
protocolName: epi
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p20_multi_gen2: {mount: left}
moduleLocationUpdate:
  thermocyclerModuleV2: {location: 7}
  magneticModuleV2: {location: 4}
labwareLocationUpdate:
  USA Scientific 12 Well Reservoir 22 mL: {loadName: usascientific_12_reservoir_22ml, namespace: opentrons, version: 1, location: 9}
  Opentrons 96 Tip Rack 20 µL (slot 3): {loadName: opentrons_96_tiprack_20ul, namespace: opentrons, version: 1, location: 3}
  Opentrons 96 Tip Rack 20 µL (slot 2): {loadName: opentrons_96_tiprack_20ul, namespace: opentrons, version: 1, location: 2}
  Opentrons 96 Tip Rack 20 µL (slot 6): {loadName: opentrons_96_tiprack_20ul, namespace: opentrons, version: 1, location: 6}
  NEST 96 Well Plate 100 µL PCR Full Skirt (slot 7): {loadName: nest_96_wellplate_100ul_pcr_full_skirt, namespace: opentrons, version: 2, location: thermocyclerModuleV2}
  NEST 96 Well Plate 100 µL PCR Full Skirt (slot 1): {loadName: nest_96_wellplate_100ul_pcr_full_skirt, namespace: opentrons, version: 2, location: 1}
  NEST 96 Well Plate 100 µL PCR Full Skirt (slot 5): {loadName: nest_96_wellplate_100ul_pcr_full_skirt, namespace: opentrons, version: 2, location: 5}
  fixedTrash: {location: {slotName: 12}}
pipetteTiprackAssignments:
  p20_multi_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - sgRNA: {serialize: true}
  - Polymerase
  - Annealing Buffer
  - Acc65I Restriction Enzyme
  - Tet1 demethylase
  - DNMT3A
  - Beads
  - Ethanol
  - Tris
  - DNA Ligase
  - E. coli
ingredLocations:
  USA Scientific 12 Well Reservoir 22 mL:
    Polymerase {volume: 2000}: A1
    Annealing Buffer {volume: 2000}: A2
    Acc65I Restriction Enzyme {volume: 2000}: A3
    Tet1 demethylase {volume: 2000}: A4
    DNMT3A {volume: 2000}: A5
    Beads {volume: 2000}: A6
    Ethanol {volume: 20000}: A12, A11
    Tris {volume: 20000}: A8
    DNA Ligase {volume: 20000}: A7
    E. coli {volume: 20000}: A10
  NEST 96 Well Plate 100 µL PCR Full Skirt (slot 7):
    sgRNA {volume: 10}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  NEST 96 Well Plate 100 µL PCR Full Skirt (slot 5):
    Tet1 demethylase {volume: 10}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6
    DNMT3A {volume: 10}: A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
savedStepForms:
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: false
  lidIsActive: false
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  lidOpen: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 8
  path: single
  changeTip: once
  aspirate_labware: USA Scientific 12 Well Reservoir 22 mL
  aspirate_wells: A2
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 7)
  dispense_wells: A1-A12
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 95
  lidIsActive: true
  lidTargetTemp: 95
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  lidOpen: false
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseMinute: 2
  pauseMessage: Annealing Oligos
    Heating to 95C
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: false
  lidIsActive: false
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  lidOpen: true
- stepType: moveLabware
  stepName: move labware
  labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 7)
  useGripper: false
  newLocation: magneticModuleV2
- stepType: moveLabware
  stepName: move labware
  labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 5)
  useGripper: false
  newLocation: thermocyclerModuleV2
- stepType: moveLabware
  stepName: move labware
  labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 7)
  useGripper: false
  newLocation: 5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: single
  changeTip: once
  aspirate_labware: USA Scientific 12 Well Reservoir 22 mL
  aspirate_wells: A3
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 5)
  dispense_wells: A1-A12
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 37
  lidIsActive: true
  lidTargetTemp: 37
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  lidOpen: true
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseHour: 2
  pauseMessage: Digesting 
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 20
  path: single
  changeTip: once
  aspirate_labware: USA Scientific 12 Well Reservoir 22 mL
  aspirate_wells: A6
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 5)
  dispense_wells: A1-A12
- stepType: mix
  stepName: mix
  pipette: p20_multi_gen2
  volume: 10
  times: 10
  changeTip: always
  labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 5)
  wells: A1-A12
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  mix_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseMinute: 5
  pauseMessage: Magnetic Bead Purification
    Incubating
- stepType: moveLabware
  stepName: move labware
  labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 5)
  useGripper: false
  newLocation: magneticModuleV2
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 19
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseMinute: 3
  pauseMessage: Magnetic Bead Purification
    Magnetising
- stepType: moveLiquid
  stepName: transfer
  stepDetails: remove supernatant
  pipette: p20_multi_gen2
  volume: 30
  path: single
  changeTip: once
  aspirate_labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 5)
  aspirate_wells: A1-A12
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  dispense_labware: fixedTrash
  dispense_wells: A1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 98
  path: single
  changeTip: once
  aspirate_labware: USA Scientific 12 Well Reservoir 22 mL
  aspirate_wells: A12
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 5)
  dispense_wells: A1-A12
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseMinute: 0
  pauseSecond: 30
  pauseMessage: Magnetic Bead Purification
    First Wash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 98
  path: single
  changeTip: once
  aspirate_labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 5)
  aspirate_wells: A1-A12
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  dispense_labware: fixedTrash
  dispense_wells: A1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 98
  path: single
  changeTip: once
  aspirate_labware: USA Scientific 12 Well Reservoir 22 mL
  aspirate_wells: A11
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 5)
  dispense_wells: A1-A12
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseSecond: 30
  pauseMessage: Magnetic Bead Purification
    Second Wash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 98
  path: single
  changeTip: once
  aspirate_labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 5)
  aspirate_wells: A1-A12
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  dispense_labware: fixedTrash
  dispense_wells: A1
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseMinute: 10
  pauseMessage: Magnetic Bead Purification
    Air Drying
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: disengage
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 52.5
  path: single
  changeTip: once
  aspirate_labware: USA Scientific 12 Well Reservoir 22 mL
  aspirate_wells: A8
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 5)
  dispense_wells: A1-A12
- stepType: mix
  stepName: mix
  pipette: p20_multi_gen2
  volume: 20
  times: 10
  changeTip: once
  labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 5)
  wells: A1-A12
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  mix_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseMinute: 2
  pauseMessage: Magnetic Bead Purification
    Incubating
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 19
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseMinute: 2
  pauseMessage: Magnetic Bead Purification
    Magneting...
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 5)
  aspirate_wells: A1-A12
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 1)
  dispense_wells: A1-A12
- stepType: moveLabware
  stepName: move labware
  labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 5)
  useGripper: false
  newLocation: offDeck
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 18
  path: single
  changeTip: once
  aspirate_labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 7)
  aspirate_wells: A1-A12
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 1)
  dispense_wells: A1-A12
- stepType: moveLabware
  stepName: move labware
  labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 7)
  useGripper: false
  newLocation: offDeck
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: once
  aspirate_labware: USA Scientific 12 Well Reservoir 22 mL
  aspirate_wells: A7
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 1)
  dispense_wells: A1-A12
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 42
  lidIsActive: true
  lidTargetTemp: 42
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  lidOpen: true
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseMinute: 10
  pauseMessage: Ligation
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: once
  aspirate_labware: USA Scientific 12 Well Reservoir 22 mL
  aspirate_wells: A10
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 1)
  dispense_wells: A1-A12
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseMinute: 30
  pauseMessage: Plasmid + Cells incubation
- stepType: moveLabware
  stepName: move labware
  labware: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 1)
  useGripper: false
  newLocation: thermocyclerModuleV2
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseMinute: 2
  pauseMessage: Heat Shocking Cells
labwareDefinitions:
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commands:
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- thermocycler/openLid: {moduleId: thermocyclerModuleV2}
- pickUpTip: {pipetteId: p20_multi_gen2, labwareId: Opentrons 96 Tip Rack 20 µL (slot 2), wellName: A1}
- aspirate: {pipetteId: p20_multi_gen2, volume: 8, labwareId: USA Scientific 12 Well Reservoir 22 mL, wellName: A2, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 7.6}
- dispense: {pipetteId: p20_multi_gen2, volume: 8, labwareId: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 7), wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 7.6}
- aspirate: {pipetteId: p20_multi_gen2, volume: 8, labwareId: USA Scientific 12 Well Reservoir 22 mL, wellName: A2, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 7.6}
- dispense: {pipetteId: p20_multi_gen2, volume: 8, labwareId: NEST 96 Well Plate 100 µL PCR Full Skirt (slot 7), wellName: A2, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 7.6}
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